includeFile = KernelPhantom.txt

i:Ge/Phantom/XBins = 99
i:Ge/Phantom/YBins = 99
i:Ge/Phantom/ZBins = 99
s:Ge/Phantom/AssignToRegionNaMed = "targetregion"

d:Interaction = 1. mm

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. m
d:Ge/BeamPosition/TransY=0. m
d:Ge/BeamPosition/TransZ=0.5 * Interaction mm
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg

# I'm not sure what the beam specifications should be 

s:So/XRayBeam/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/XRayBeam/Component = "BeamPosition"
s:So/XRayBeam/BeamParticle = "gamma"
d:So/XRayBeam/BeamEnergy = 120 keV
u:So/XRayBeam/BeamEnergySpread = 0 # I don't know what this should be 
s:So/XRayBeam/BeamPositionDistribution = "Flat" # Flat or Gaussian
s:So/XRayBeam/BeamPositionCutoffShape = "Ellipse" # Point, Ellipse, Rectangle or Isotropic
d:So/XRayBeam/BeamPositionCutoffX = 0.5 * Interaction mm
d:So/XRayBeam/BeamPositionCutoffY = 0.5 * Interaction mm
d:So/XRayBeam/BeamPositionSpreadX = 0. cm
d:So/XRayBeam/BeamPositionSpreadY = 0. cm
s:So/XRayBeam/BeamAngularDistribution = "Flat" # Flat or Gaussian
d:So/XRayBeam/BeamAngularCutoffX = 0.1 deg
d:So/XRayBeam/BeamAngularCutoffY = 0.1 deg
d:So/XRayBeam/BeamAngularSpreadX = 0.0 rad
d:So/XRayBeam/BeamAngularSpreadY = 0.0 rad
i:So/XRayBeam/NumberOfHistoriesInRun = 900000000
i:So/XRayBeam/NumberOfHistoriesInRandomJob = 0 # do I need this?

i:Ts/ShowHistoryCountAtInterval = 10000
#b:Ts/ShowCPUTime = "True"

s:Sc/RealKernel1/Quantity = "EnergyDeposit"
s:Sc/RealKernel1/Component = "Phantom"

#Ts/UseQt = "True"

#s:Gr/ViewA/Type = "OpenGL"
#b:Gr/ViewA/IncludeAxes = "False"
#d:Gr/ViewA/AxesSize = 1. m

s:Sc/RealKernel1/IfOutputFileAlreadyExists = "Overwrite"

b:Vr/UseVarianceReduction = "True"
s:Vr/ForcedInteraction/Type   = "ForcedInteraction"
sv:Vr/ForcedInteraction/forregion/targetregion/processesNamed   = 9 "compt" "phot" "conv" "eBrem" "Rayl" "eIoni" "ePairProd" "CoulombScat" "msc"
dv:Vr/ForcedInteraction/ForRegion/targetregion/ForcedDistances  = 9 Interaction Interaction Interaction Interaction Interaction Interaction Interaction Interaction Interaction mm