includeFile = LungBoneWaterPhantom.txt

#i:Ge/Phantom/XBins = 50
#i:Ge/Phantom/YBins = 50
#i:Ge/Phantom/ZBins = 50

i:Ge/Water/XBins = 50
i:Ge/Water/YBins = 50
i:Ge/Water/ZBins = 20

i:Ge/Bone/XBins = 50
i:Ge/Bone/YBins = 50
i:Ge/Bone/ZBins = 20

i:Ge/Lung/XBins = 50
i:Ge/Lung/YBins = 50
i:Ge/Lung/ZBins = 10

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0. m
d:Ge/BeamPosition/TransY=0. m
d:Ge/BeamPosition/TransZ=Ge/World/HLZ m
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg

s:So/XRayBeam/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/XRayBeam/Component = "BeamPosition"
s:So/XRayBeam/BeamParticle = "gamma"
d:So/XRayBeam/BeamEnergy = 120 keV
u:So/XRayBeam/BeamEnergySpread = 0 # I don't know what this should be 
s:So/XRayBeam/BeamPositionDistribution = "Flat" # Flat or Gaussian
s:So/XRayBeam/BeamPositionCutoffShape = "Ellipse" # Point, Ellipse, Rectangle or Isotropic
d:So/XRayBeam/BeamPositionCutoffX = 0.01 cm
d:So/XRayBeam/BeamPositionCutoffY = 0.01 cm
d:So/XRayBeam/BeamPositionSpreadX = 0.1 cm
d:So/XRayBeam/BeamPositionSpreadY = 0.1 cm
s:So/XRayBeam/BeamAngularDistribution = "Flat" # Flat or Gaussian
d:So/XRayBeam/BeamAngularCutoffX = 0.1 deg
d:So/XRayBeam/BeamAngularCutoffY = 0.1 deg
d:So/XRayBeam/BeamAngularSpreadX = 0.0 rad
d:So/XRayBeam/BeamAngularSpreadY = 0.0 rad
i:So/XRayBeam/NumberOfHistoriesInRun = 10000000
i:So/XRayBeam/NumberOfHistoriesInRandomJob = 0 # do I need this?

i:Ts/ShowHistoryCountAtInterval = 1000000
b:Ts/ShowCPUTime = "True"

s:Sc/TestingDose9_Lung/Quantity = "DoseToMedium"
s:Sc/TestingDose9_Lung/Component = "Lung"
sv:Sc/TestingDose9_Lung/Report = 2 "Sum" "Standard_Deviation"
s:Sc/TestingDose9_Lung/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/TestingDose9_Bone/Quantity = "DoseToMedium"
s:Sc/TestingDose9_Bone/Component = "Bone"
sv:Sc/TestingDose9_Bone/Report = 2 "Sum" "Standard_Deviation"
s:Sc/TestingDose9_Bone/IfOutputFileAlreadyExists = "Overwrite"

s:Sc/TestingDose9_Water/Quantity = "DoseToMedium"
s:Sc/TestingDose9_Water/Component = "Water"
sv:Sc/TestingDose9_Water/Report = 2 "Sum" "Standard_Deviation"
s:Sc/TestingDose9_Water/IfOutputFileAlreadyExists = "Overwrite"

#Ts/UseQt = "True"

#s:Gr/ViewA/Type = "OpenGL"
#b:Gr/ViewA/IncludeAxes = "False"
#d:Gr/ViewA/AxesSize = 1. m

i:Ts/NumberOfThreads = 4
