# Demonstrates scoring in an XCAT file.
#
# Tumour is at [143, 64, 49]

# b:Ts/UseQt                              = "True"
b:Gr/Enable                          = "False"                # CHANGE
i:Ts/NumberOfThreads                   = 0
# b:Ts/PauseBeforeQuit = "True"

i:Ts/RunVerbosity = 100

s:Ph/ListName = "Default"
# b:Ph/ListProcesses = "False" # Set true to dump list of active physics processes to console
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"
d:Ph/Default/EMRangeMin = 10. keV
d:Ph/Default/EMRangeMax = 500. MeV
d:Ph/Default/CutForAllParticles = 0.25 mm
d:Ph/Default/SetProductionCutLowerEdge = 5 keV

s:Ge/MyGroup/Type="Group"
s:Ge/MyGroup/Parent = "World"
d:Ge/MyGroup/TransX=0. m
d:Ge/MyGroup/TransY=0. cm
d:Ge/MyGroup/TransZ=0. cm
d:Ge/MyGroup/RotY=0. deg
d:Ge/MyGroup/RotZ=0. deg
d:Ge/MyGroup/RotX= Tf/angles/Value deg

s:Ge/Patient/Type		= "TsImageCube"
s:Ge/Patient/InputDirectory	= "./"
s:Ge/Patient/InputFile		= "lung_patient.bin"
# s:Ge/Patient/MetaDataFile	= "head_phantom_w_tumour_for_michael_log"
# s:Ge/Patient/ImagingToMaterialConverter = "XCAT_Attenuation" # "XCAT_Activity"

s:Ge/Patient/ImagingToMaterialConverter = "MaterialTagNumber"
iv:Ge/Patient/MaterialTagNumbers = 11 0 2 3 4 5 6 7 8 9 10 11
sv:Ge/Patient/MaterialNames = 11 "Air" "XCAT_G4_AIR_LD_ICRP_low" "XCAT_G4_MUSCLE_SKELETAL_ICRP_low" "XCAT_G4_MUSCLE_SKELETAL_ICRP_med" "XCAT_G4_MUSCLE_SKELETAL_ICRP_top" "XCAT_G4_LUNG_LD_ICRP_low" "XCAT_G4_LUNG_LD_ICRP_med" "XCAT_G4_LUNG_LD_ICRP_top" "XCAT_RIB_BONE_ICRP_low" "XCAT_RIB_BONE_ICRP_med" "XCAT_RIB_BONE_ICRP_top"
includeFile = egsphant_materials.txt
# includeFile = XCAT_Materials.txt
# d:Ge/Patient/VoxelSizeZ = 3.125 mm
s:Ge/Patient/DataType = "Short"
s:Ge/Patient/Parent   = "MyGroup"
dc:Ge/Patient/TransY   = 0. m
dc:Ge/Patient/TransZ   = -7.5 cm
dc:Ge/Patient/TransX   = -2 cm
d:Ge/Patient/RotX     = 0 deg
d:Ge/Patient/RotY     = 90. deg
d:Ge/Patient/RotZ     = 0. deg
iv:Ge/Patient/ShowSpecificSlicesZ = 1 50 #6 1 15 30 55 70 85

# s:Ge/Patient/DataType  = “FLOAT” # “SHORT”, “INT” or “FLOAT"
i:Ge/Patient/NumberOfVoxelsX  = 228
i:Ge/Patient/NumberOfVoxelsY  = 130
i:Ge/Patient/NumberOfVoxelsZ = 115
d:Ge/Patient/VoxelSizeX       = 2.51 mm
d:Ge/Patient/VoxelSizeY       = 2.51 mm
d:Ge/Patient/VoxelSizeZ       = 2.5 mm
# d:Ge/Patient/VoxelSizeZ       = .5 mm

# iv:Ge/Patient/ShowSpecificSlicesZ = 1 55

s:Sc/DoseOnCTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnCTGrid/Component                 = "Patient"
# b:Sc/DoseOnCTGrid/OutputToConsole           = "True"
s:Sc/DoseOnCTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseOnCTGrid/OutputType                = "DICOM"
b:Sc/DoseOnCTGrid/DICOMOutput32BitsPerPixel = "True"
s:Sc/DoseOnCTGrid/SplitByTimeFeature = "ImageName"

s:Gr/ViewA/Type           = "OpenGL"
i:Gr/ViewA/WindowSizeX    = 900
i:Gr/ViewA/WindowSizeY    = 900
d:Gr/ViewA/Theta          = -10 deg
# d:Gr/ViewA/Theta          = 0 deg
d:Gr/ViewA/Phi            = 0 deg
u:Gr/ViewA/Zoom             = 2
b:Gr/ViewA/IncludeAxes = "True" # defaults to "False"
s:Gr/ViewA/AxesComponent = "World" # Component in which to center the axes. Defaults to World.
d:Gr/ViewA/AxesSize = 0.5 m # size of axes


iv:Gr/Color/TransparentBlack = 4 0 0 0 0

s:Ge/World/Material                    = "Vacuum"
d:Ge/World/HLX                         = 0.5 m
d:Ge/World/HLY                         = 0.5 m
d:Ge/World/HLZ                         = 1. m

# Extra graphics options to handle complex voxel geometries
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 20000000

## ----------------------------------------------------------

    BEAM

## ----------------------------------------------------------

d:Tf/TimelineEnd                       = 180. ms
i:Tf/NumberOfSequentialTimes           = 180
# s:Tf/angles/Function              = "Step"
dv:Tf/angles/Times                = 180 0 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 30 31 32 33 34 35 36 37 38 39 40 41 42 43 44 45 46 47 48 49 50 51 52 53 54 55 56 57 58 59 60 61 62 63 64 65 66 67 68 69 70 71 72 73 74 75 76 77 78 79 80 81 82 83 84 85 86 87 88 89 90 91 92 93 94 95 96 97 98 99 100 101 102 103 104 105 106 107 108 109 110 111 112 113 114 115 116 117 118 119 120 121 122 123 124 125 126 127 128 129 130 131 132 133 134 135 136 137 138 139 140 141 142 143 144 145 146 147 148 149 150 151 152 153 154 155 156 157 158 159 160 161 162 163 164 165 166 167 168 169 170 171 172 173 174 175 176 177 178 179 ms
dv:Tf/angles/Values               = 180 0 2 4 6 8 10 12 14 16 18 20 22 24 26 28 30 32 34 36 38 40 42 44 46 48 50 52 54 56 58 60 62 64 66 68 70 72 74 76 78 80 82 84 86 88 90 92 94 96 98 100 102 104 106 108 110 112 114 116 118 120 122 124 126 128 130 132 134 136 138 140 142 144 146 148 150 152 154 156 158 160 162 164 166 168 170 172 174 176 178 180 182 184 186 188 190 192 194 196 198 200 202 204 206 208 210 212 214 216 218 220 222 224 226 228 230 232 234 236 238 240 242 244 246 248 250 252 254 256 258 260 262 264 266 268 270 272 274 276 278 280 282 284 286 288 290 292 294 296 298 300 302 304 306 308 310 312 314 316 318 320 322 324 326 328 330 332 334 336 338 340 342 344 346 348 350 352 354 356 358 deg
# dv:Tf/beam_energy/Values               = 9 0 20 40 60 80 100 120 140 160 deg
# dv:Tf/beam_energy/Times                = 9 0 20 40 60 80 100 120 140 160 ms
# d:So/Example/BeamEnergy                = Tf/beam_energy/Value keV

# s:Tf/names/Function              = "Step"
# dv:Tf/names/Times                = 180 0 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 30 31 32 33 34 35 36 37 38 39 40 41 42 43 44 45 46 47 48 49 50 51 52 53 54 55 56 57 58 59 60 61 62 63 64 65 66 67 68 69 70 71 72 73 74 75 76 77 78 79 80 81 82 83 84 85 86 87 88 89 90 91 92 93 94 95 96 97 98 99 100 101 102 103 104 105 106 107 108 109 110 111 112 113 114 115 116 117 118 119 120 121 122 123 124 125 126 127 128 129 130 131 132 133 134 135 136 137 138 139 140 141 142 143 144 145 146 147 148 149 150 151 152 153 154 155 156 157 158 159 160 161 162 163 164 165 166 167 168 169 170 171 172 173 174 175 176 177 178 179 ms
# dv:Tf/names/Values               = 180 0 2 4 6 8 10 12 14 16 18 20 22 24 26 28 30 32 34 36 38 40 42 44 46 48 50 52 54 56 58 60 62 64 66 68 70 72 74 76 78 80 82 84 86 88 90 92 94 96 98 100 102 104 106 108 110 112 114 116 118 120 122 124 126 128 130 132 134 136 138 140 142 144 146 148 150 152 154 156 158 160 162 164 166 168 170 172 174 176 178 180 182 184 186 188 190 192 194 196 198 200 202 204 206 208 210 212 214 216 218 220 222 224 226 228 230 232 234 236 238 240 242 244 246 248 250 252 254 256 258 260 262 264 266 268 270 272 274 276 278 280 282 284 286 288 290 292 294 296 298 300 302 304 306 308 310 312 314 316 318 320 322 324 326 328 330 332 334 336 338 340 342 344 346 348 350 352 354 356 358 deg

s:Tf/ImageName/Function      = "Step"
dv:Tf/ImageName/Times                = 90 0 4 8 12 16 20 24 28 32 36 40 44 48 52 56 60 64 68 72 76 80 84 88 92 96 100 104 108 112 116 120 124 128 132 136 140 144 148 152 156 160 164 168 172 176 180 184 188 192 196 200 204 208 212 216 220 224 228 232 236 240 244 248 252 256 260 264 268 272 276 280 284 288 292 296 300 304 308 312 316 320 324 328 332 336 340 344 348 352 356 ms
sv:Tf/ImageName/Values               = 90 "000" "004" "008" "012" "016" "020" "024" "028" "032" "036" "040" "044" "048" "052" "056" "060" "064" "068" "072" "076" "080" "084" "088" "092" "096" "100" "104" "108" "112" "116" "120" "124" "128" "132" "136" "140" "144" "148" "152" "156" "160" "164" "168" "172" "176" "180" "184" "188" "192" "196" "200" "204" "208" "212" "216" "220" "224" "228" "232" "236" "240" "244" "248" "252" "256" "260" "264" "268" "272" "276" "280" "284" "288" "292" "296" "300" "304" "308" "312" "316" "320" "324" "328" "332" "336" "340" "344" "348" "352" "356"



dc:So/Example/BeamAngularCutoffX       = 0.04 rad
dc:So/Example/BeamAngularCutoffY       = 0.04 rad # Cheating a bit
d:Ge/BeamPosition/TransY               = 0.3693 m #cos(20)0.393
d:Ge/BeamPosition/TransX               = 0. m
d:Ge/BeamPosition/TransZ               = 0.13440 m
d:Ge/BeamPosition/RotX                 = -110. deg

u:So/Example/BeamEnergySpread          = 0.001
s:So/Example/Type                      = "Beam"
s:So/Example/Component                 = "BeamPosition"
s:So/Example/BeamParticle              = "gamma"
s:So/Example/BeamPositionDistribution  = "Flat"
s:So/Example/BeamPositionCutoffShape   = "Ellipse"
dc:So/Example/BeamPositionCutoffX      = 0.01 cm
dc:So/Example/BeamPositionCutoffY      = 0.01 cm
sc:So/Example/BeamAngularDistribution  = "Flat"
i:So/Example/NumberOfHistoriesInRun    = 200000
s:So/Example/BeamEnergySpectrumType = "Continuous"

# d:Ge/BeamPosition/RotY                 = -10. deg
# d:Ge/BeamPosition/RotZ                 = 0. deg
# d:Ge/BeamPosition/TransY               = 0 cm # 40 * sin(10)
# d:Ge/BeamPosition/TransX               = -6.946 cm
i:Ts/ShowHistoryCountAtInterval        = 100000
