# Demonstrates scoring in an XCAT file.

includeFile = Ge_XCAT_kv_treatment.txt

s:Sc/DoseOnCTGrid/OutputFile                = "doses_neg20deg/dose_360_180dwells_24mmTumour_225"
dv:So/Example/BeamEnergySpectrumValues = 448 1.25 1.75 2.25 2.75 3.25 3.75 4.25 4.75 5.25 5.75 6.25 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224.75 keV 
uv:So/Example/BeamEnergySpectrumWeights = 448 6.420056661560977e-207 0.0 0.0 3.8667395099886385e-240 2.8666221475597988e-155 3.835579610804432e-106 4.831371640035664e-76 1.5596872394025675e-56 2.3423648837572054e-43 4.137260024646126e-34 1.8658291807869853e-27 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6.942077596692129e-06

s:Sc/DoseOnCTGrid/Quantity                  = "DoseToMedium"
s:Sc/DoseOnCTGrid/Component                 = "Patient"
# b:Sc/DoseOnCTGrid/OutputToConsole           = "True"
s:Sc/DoseOnCTGrid/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseOnCTGrid/OutputType                = "Dicom"
b:Sc/DoseOnCTGrid/DICOMOutput32BitsPerPixel = "True"
s:Sc/DoseOnCTGrid/SplitByTimeFeature = "ImageName"

d:Ge/BeamPosition/TransY               = 0.3693 m #cos(20)0.393
d:Ge/BeamPosition/TransZ               = 0. m
d:Ge/BeamPosition/TransX               = -0.13440 m
d:Ge/BeamPosition/RotX                 = -90. deg
d:Ge/BeamPosition/RotY                 = -20 deg